PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'run': '1', 'config': 'fnirs'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = -1.0000, -1.0000, -1.0000
  expName = hearing
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine welcome
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    CodeComponent code_init
      Code Type = Py
      Before Experiment:
        import os
        import random
        from pylsl import StreamInfo, StreamOutlet
        import socket
        from psychopy import sound, core
        import yaml
        import cv2
        import signal
        import sys
        import threading
        from datetime import datetime
        import platform
        import threading
        import serial
        import csv
        import random
        import time
        import atexit

        started_recording = False
        original_quit = core.quit
        lsl_socket, recorder, ppg_recorder, recording_thread, ppg_thread = None, None, None, None, None

        def cleanup():
            global started_recording, lsl_socket, recorder, ppg_recorder, recording_thread, ppg_thread
            print("At exit...")
            if started_recording:
                print("Performing cleanup tasks...")
                lsl_socket.sendall(b"stop\n")
                try:
                    lsl_socket.shutdown(socket.SHUT_RDWR)
                except OSError:
                    pass  # Ignore errors if the socket is already closed
                lsl_socket.close()
                recorder.stop()
                ppg_recorder.stop()
                recording_thread.join()
                ppg_thread.join()
                started_recording = False

        def custom_quit():
            cleanup()  # Your cleanup function
            original_quit()

        class VideoRecorder:
            def __init__(self, cam_id=0, output_name='output', default_fps=30, display_video=False, enable_lsl=False):
                print("VideoRecorder start.")
                self.cam_id = cam_id
                self.output_path = os.path.join(os.getcwd(),"input", f"{output_name}.avi")
                self.display_video = display_video
                self.enable_lsl = enable_lsl
                self.cap = None
                self.out = None
                self.video_outlet = None
                self.default_fps = default_fps
                self.stop_event = threading.Event()
                if self.enable_lsl:
                    info = StreamInfo('VideoStream', 'Video', 1, self.default_fps,
                                      'float32', 'videouid34234')
                    self.video_outlet = StreamOutlet(info)
                print("VideoRecorder initialized successfully.")

            def signal_handler(self, sig, frame):
                print('Termination signal received. Releasing resources...')
                self.stop()
                sys.exit(0)

            def stop(self):
                self.stop_event.set()

            def release_resources(self):
                if self.cap:
                    self.cap.release()
                if self.out:
                    self.out.release()
                cv2.destroyAllWindows()

            def record_video(self):
                backend = cv2.CAP_DSHOW if platform.system() == 'Windows' else None
                self.cap = cv2.VideoCapture(self.cam_id, backend)
                fourcc = cv2.VideoWriter_fourcc(*'XVID')
                frame_width = int(self.cap.get(cv2.CAP_PROP_FRAME_WIDTH))
                frame_height = int(self.cap.get(cv2.CAP_PROP_FRAME_HEIGHT))
                self.out = cv2.VideoWriter(
                    self.output_path, fourcc, self.default_fps, (frame_width, frame_height))

                frame_number = 0
                try:
                    while self.cap.isOpened() and not self.stop_event.is_set():
                        ret, frame = self.cap.read()
                        if ret:
                            now = datetime.now()
                            timestamp = now.strftime("%Y-%m-%d %H:%M:%S.%f")
                            if self.video_outlet:
                                self.video_outlet.push_sample([frame_number])

                            colour = (0, 255, 0)
                            origin = (10, 30)
                            font = cv2.FONT_HERSHEY_SIMPLEX
                            scale = 1
                            thickness = 2

                            cv2.putText(frame, timestamp, origin,
                                        font, scale, colour, thickness)
                            self.out.write(frame)
                            frame_number += 1
                            if self.display_video:
                                cv2.imshow('frame', frame)

                            if cv2.waitKey(1) & 0xFF == ord('q'):
                                break
                        else:
                            break
                finally:
                    self.release_resources()

        class PPGRecorder:
            def __init__(self, port, baud_rate=9600, enable_lsl=True, simulate_data=False):
                self.port = port
                self.baud_rate = baud_rate
                self.enable_lsl = enable_lsl
                self.simulate_data = simulate_data
                self.ser = None
                self.stop_event = threading.Event()
                self.sample_rate = 50

                if self.enable_lsl:
                    info = StreamInfo('PPGStream', 'PPG', 1, self.sample_rate,
                                      'float32', 'ppguid34234')
                    self.ppg_outlet = StreamOutlet(info)

            def start(self):
                if self.simulate_data:
                    self.simulate_ppg_data()
                else:
                    try:
                        self.ser = serial.Serial(self.port, self.baud_rate, timeout=1)
                        time.sleep(2)  # Wait for the connection to be established
                        print(f"Successfully connected to {self.port}")

                        self.record_ppg()
                    except serial.SerialException as e:
                        print(f"Serial error: {e}")
                    except Exception as e:
                        print(f"An error occurred: {e}")

            def stop(self):
                self.stop_event.set()

            def record_ppg(self):
                with open('pulse_data.csv', 'w', newline='') as csvfile:
                    csvwriter = csv.writer(csvfile)
                    csvwriter.writerow(['Datetime', 'Timestamp', 'Signal'])

                    print("Logging data. Press 'q' to stop.")
                    while not self.stop_event.is_set():
                        signal = self.read_signal()
                        if signal:
                            timestamp = time.time()
                            datetime_str = datetime.fromtimestamp(
                                timestamp).strftime('%Y-%m-%d %H:%M:%S.%f')
                            csvwriter.writerow([datetime_str, timestamp, signal])

                            if self.enable_lsl:
                                self.ppg_outlet.push_sample([float(signal)])
                        else:
                            print("No signal received.")

            def read_signal(self):
                try:
                    signal = self.ser.readline().decode('utf-8').strip()
                    return signal
                except Exception as e:
                    print(f"Error reading signal: {e}")
                    return None

            def simulate_ppg_data(self):
                print("Simulating PPG data. Press 'q' to stop.")
                while not self.stop_event.is_set():
                    signal = random.uniform(0.0, 1.0)  # Simulate a random PPG signal

                    if self.enable_lsl:
                        self.ppg_outlet.push_sample([signal])

                    time.sleep(0.02)  # Simulate a 50 Hz signal

            def release_resources(self):
                if self.ser and self.ser.is_open:
                    self.ser.close()
                    print(f"Closed connection to {self.port}")

        core.quit = custom_quit
        atexit.register(cleanup)
        marker_info = StreamInfo('HearingMarkerStream', 'Markers',
                                 1, 0, 'string', 'hearingid2023')

        config_file = open('config.yaml')
        yaml_config = yaml.safe_load(config_file)
        marker_outlet = StreamOutlet(marker_info)
      Begin Experiment:
        config_type = expInfo['config']
        exp_config = yaml_config[config_type]

        sound_files = exp_config['sound_files']
        baseline_duration = exp_config['baseline_duration']
        stimuli_repeat = exp_config['stimuli_repeat']
        stimulus_dration = exp_config['stimulus_dration']
        response_duration = exp_config['response_duration']
        rest_range = exp_config['rest_range']
        root_dir = os.path.join(os.getcwd(),"exp_data")

        #sound_dict = {}
        #for sf in sound_files:
        #    sound_path = os.path.join('sounds', f"{sf}.wav")
        #    sound_stimuli = sound.Sound(sound_path, secs=-1, stereo=-1, hamming=True,
        #    volume=-1, name=sf)
        #    sound_dict[sf] = sound_stimuli

        sound_files = sound_files * stimuli_repeat
        n_trials = len(sound_files)
        random.shuffle(sound_files)
        sound_idx = 0


        participant_id = expInfo['participant']
        run = expInfo['run']
        task = yaml_config['task']

        print("creating additional modalitiy recorders: PPG and Video")
        global started_recording, lsl_socket, recorder, ppg_recorder, recording_thread, ppg_thread
        recorder = VideoRecorder(cam_id=1, output_name=participant_id, display_video=False, enable_lsl=True)
        ppg_recorder = PPGRecorder(port="COM5", enable_lsl=True, simulate_data=True)
        recording_thread = threading.Thread(target=recorder.record_video)
        ppg_thread = threading.Thread(target=ppg_recorder.start)


        lsl_socket = socket.create_connection(("localhost", 22345))
        if lsl_socket is not None:
            started_recording = True
            print(f"start record: {started_recording}")
            recording_thread.start()
            ppg_thread.start()
            template_str = os.path.join("sub-%p","sub-%p_task-%b_run-%n.xdf")
            config_str = f'filename {{root:{root_dir}}} {{template:{template_str}}} {{run:{run}}} {{participant:{participant_id}}} {{task:{task}}}\n'
            print(config_str)

            lsl_socket.sendall(b"update\n")
            lsl_socket.sendall(b"select all\n")
            lsl_socket.sendall(config_str.encode('utf-8'))
            lsl_socket.sendall(b"start\n")

            core.wait(5)
      End Experiment:
        marker_outlet.push_sample(["end"])
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this experiment, you will listen to several different sounds. Once the audio finishes playing, you must sit still and focus on it.

        Press the space key to start the experiment.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest
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    CodeComponent code_rest
      Code Type = Py
      Begin Routine:
        marker_outlet.push_sample(["rest"])
        rest_duration = random.randint(rest_range[0],rest_range[1])
        if sound_idx < len(sound_files)-1:
            sound_idx+=1
        else:
            sound_idx = 0
    PolygonComponent cross_4
      fillColor = white
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rest_duration
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  Routine pre_stim
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        name = sound_files[sound_idx]
        marker_outlet.push_sample([f"pre-stim-{name}"])
        sound_path = os.path.join('sounds', f"{name}.wav")
    PolygonComponent cross
      fillColor = white
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $pre_stim
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  Routine stim
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    CodeComponent pupil_code
      Code Type = Py
      Begin Routine:
        name = sound_files[sound_idx]
        sound_path = os.path.join('sounds', f"{name}.wav")
        current_sound.setSound(sound_path, hamming=True)
        marker_outlet.push_sample([f"stim-{name}"])
        sound_duration = current_sound.getDuration()
        print(f'{name}: {sound_duration}')
    SoundComponent current_sound
      sound [set every repeat] = $sound_path
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimulus_dration
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sound_duration
      text [set every repeat] = $name
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  Routine post_stim
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    CodeComponent code_increment
      Code Type = Py
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      Begin Routine:
        marker_outlet.push_sample([f"response-{name}"])
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $response_duration
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  Routine baseline
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    CodeComponent code_baseline
      Code Type = Py
      Begin Routine:
        print("sending baseline")
        marker_outlet.push_sample(["baseline"])
    PolygonComponent cross_3
      fillColor = white
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $baseline_duration
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  Routine end
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        print("sending end")
        marker_outlet.push_sample(["end"])
        if started_recording:
            lsl_socket.sendall(b"stop\n")
            started_recording = False
  Routine base
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    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        marker_outlet.push_sample(["baseline"])
    PolygonComponent polygon
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $baseline_duration
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  Routine pmt_pre_stim
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    PolygonComponent black_screen
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine pmt_stim
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    PolygonComponent gray_screen
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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  Routine pmt_post_stim
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    PolygonComponent black_screen_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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Flow
  Routine welcome
  LoopInitiator pmt_trials loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine pmt_pre_stim
    Routine pmt_stim
    Routine pmt_post_stim
  LoopTerminator pmt_trials
  Routine base
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = n_trials
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    Routine stim
    Routine post_stim
    Routine rest
  LoopTerminator trials
