PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'sound_repeat': '10', 'range_duration': '30', 'pre_stimulus': '3', 'post_stimulus': '5'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  color = -1.0000, -1.0000, -1.0000
  expName = passive
  keyboardBackend = ioHub
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Routines
  Routine welcome
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    CodeComponent code_init
      Code Type = Py
      Before Experiment:
        import os
        import random
        from pylsl import StreamInfo, StreamOutlet
        import socket
        from psychopy import sound
        import time

        marker_info = StreamInfo('HearingMarkerStream', 'Markers',
                                 1, 0, 'string', 'hearingid2023')

        marker_outlet = StreamOutlet(marker_info)
        started_recording = False
        lsl_socket = socket.create_connection(("localhost", 22345))
        pi_socket = socket.create_connection(("pi1", 65432))
        time.sleep(0.5)
        pi_socket.sendall(b"start")
        #print('!!!---Lab Recorder Not Started---!!!')
        #lsl_socket = None
      Begin Experiment:
        sound_files = ['babycry', 'chewing', 'engine', 'seawave', 'typing']
        repeat = int(expInfo['sound_repeat'])
        range_time = int(expInfo['range_duration'])
        pre_stim = int(expInfo['pre_stimulus'])
        post_stim = int(expInfo['post_stimulus'])

        #sound_dict = {}
        #for sf in sound_files:
        #    sound_path = os.path.join('sounds', f"{sf}.wav")
        #    sound_stimuli = sound.Sound(sound_path, secs=-1, stereo=-1, hamming=True,
        #    volume=-1, name=sf)
        #    sound_dict[sf] = sound_stimuli

        sound_files = sound_files * repeat
        n_trials = len(sound_files)
        random.shuffle(sound_files)
        sound_idx = 0


        participant_id = expInfo['participant']
        task = 'passive'

        if lsl_socket is not None:
            started_recording = True
            config_str = f'filename {{template:sub-%p/sub-%p_task-%b.xdf}} {{participant:{participant_id}}} {{task:{task}}}\n'
            print(config_str)

            lsl_socket.sendall(b"update\n")
            lsl_socket.sendall(b"select all\n")
            lsl_socket.sendall(config_str.encode('utf-8'))
            lsl_socket.sendall(b"start\n")
      End Experiment:
        if started_recording:
            lsl_socket.sendall(b"stop\n")
            pi_socket.sendall(b"stop")
            started_recording = False
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Start Range Test

        (Press Space)
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine black
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    CodeComponent code_black
      Code Type = Py
      Begin Routine:
        marker_outlet.push_sample(["range-black"])
    PolygonComponent black_screen_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $range_time
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  Routine gray
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    CodeComponent code_gray
      Code Type = Py
      Begin Routine:
        marker_outlet.push_sample(["range-gray"])
    PolygonComponent gray_screen
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $range_time
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  Routine pre_stim
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        name = sound_files[sound_idx]
        marker_outlet.push_sample([f"pre-stim-{name}"])
        sound_path = os.path.join('sounds', f"{name}.wav")
    PolygonComponent cross
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $pre_stim
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  Routine stim
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    CodeComponent pupil_code
      Code Type = Py
      Begin Routine:
        marker_outlet.push_sample([f"stim-{name}"])
        current_sound.setSound(sound_path, hamming=True)
        sound_duration = current_sound.getDuration()
        print(f'{name}: {sound_duration}')
      End Routine:
        marker_outlet.push_sample([f"poststim-{name}"])
    SoundComponent current_sound
      sound [set every repeat] = $sound_path
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sound_duration
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sound_duration
      text [set every repeat] = $name
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  Routine post_stim
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    CodeComponent code_increment
      Code Type = Py
      End Routine:
        if sound_idx < len(sound_files)-1:
            sound_idx+=1
        else:
            sound_idx = 0
    PolygonComponent cross_2
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $post_stim
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Flow
  Routine welcome
  Routine black
  Routine gray
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = n_trials
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    Routine pre_stim
    Routine stim
    Routine post_stim
  LoopTerminator trials
